PsychoPy2experiment version="2021.2.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1200, 800]
  color = white
  expName = exp3
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Routines
  Routine term_and_condition
    TextComponent text
      color = black
      letterHeight = 0.015
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Monash University
        Study on visual experience
        Investigators:
           Prof. Naotsugu Tsuchiya, Monash University, Australia    (naotsugu.tsuchiya@monash.edu)
           Dr Ariel Zeleznikow-Johnston, Monash University, Australia    (Ariel.Zeleznikow-Johnston@monash.edu)
           Mr Yusuke Miyashita, Monash University, Australia    (ymiy0005@student.monash.edu)
        Hello! Thank you for your interest in our study.

        This experiment will take approximately 10 minutes of your time. Don't worry! Further instructions will be provided before the experiment starts, and you get three practice trials.

        All data will be kept confidential. If you have any question at this stage, please contact the investigators above.

        Click here for a detailed version of the participant information sheet
        1. Your consent
        This participant information sheet contains detailed information about the research project. Its purpose is to explain to you all the procedures involved in this project before you decide whether or not to take part in it. Please read this carefully. Feel free to ask questions about any information in the document. If you wish to discuss the project with a relative or friend or your local health worker, please do so.
        Once you understand what the project is about and if you agree to take part in it, you will be asked to read and accept the Consent Form (next page). By accepting the Consent Form, you indicate that you understand the information and that you give your consent to participate in the research project.
        2. Purpose of the study
        The aim of this study is to examine the spacial experience of human perception.
        3. What will happen to me if I participate in the study?
        You will complete an online visual perceptual task. During this task, you will be shown images and asked to make responses.
        All results will be de-identified at the time of examination. Please ensure you understand and accept this before providing informed consent.
        5. Possible risks
        If you begin to feel fatigued during the study you may take a break and return to the testing a little bit later. If you find the testing too frustrating you may stop that test altogether. You may discontinue your participation in the study at any time. Your personal information will be kept confidential as outlined in Section
        4. Use of data for other projects
        Data from this research project may be re-used for other related projects in a de-identified manner. Information identifying you will only be available to the researchers involved in the particular study and will not be identifiable when reported
        9. Results of Project
        If you would like, the results of the study can be sent to you by newsletter or summary format. It is important to know that results may not be known until well after your participation in the study is completed
        10. Further Information or Any Problems
        If you require further information or if you have any problems concerning this project, you can contact the researchers above.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.0
      store = nothing
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = Ready to start? Please press [space] to begin the experiment.
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  Routine calibration
    ImageComponent image
      image = Calibration.PNG
      pos = (0, 0.15)
      saveStartStop = False
      size = (0.65, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 2.0
      text = Press [y] to move to next step
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    KeyboardComponent key_resp_2
      allowedKeys = 'y'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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    TextComponent text_11
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
        Calibration step:
        Adjust your head position until you see your thumb has a similar width with the black line at the center of the screen.
  Routine instruction
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
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    ImageComponent Inst
      image = Instruction.PNG
      pos = (0, 0.15)
      size = (1.2, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_13
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 1
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      text:
        You will see an image with dots. Then the screen switches and ask you questions about the image you saw.
        Press [space] to continue
  Routine memory_inst
    TextComponent text_5
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please note that we are not interested in your ability to reproduce the exact location of the dots later.
        We are interested in your experience at the moment that you were seeing the display.
        No matter whether you can reproduce the positions of dots or not, please report your own experience of the dots AT THE TIME when the image was presented
    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text = press [1] to move to next experiment
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    KeyboardComponent mem_inst
      allowedKeys = '1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine stimuli
    ImageComponent stimuli1
      image [set every repeat] = $images
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    DotsComponent dots
      coherence = 0
      color = red
      dir = 0.0
      dotLife = 0
      dotSize = 20
      fieldPos [set every repeat] = $location
      fieldShape = circle
      fieldSize = 1.0
      nDots = 1
      noiseDots = direction
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine practice_trial
    TextComponent text_9
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press [s] to start the prctice trial
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    KeyboardComponent key_resp_6
      allowedKeys = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start_actual
    KeyboardComponent key_resp_4
      allowedKeys = 's'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        End of the practice trial.
        Press [s] to start the actual trial
  Routine practice_stimuli
    ImageComponent stimuli_prac
      image = images\20.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    DotsComponent practice_dot
      coherence = 0
      color = red
      dir = 0.0
      dotLife = 0
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 1
      noiseDots = direction
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine practice_survey
    KeyboardComponent key_resp_5
      allowedKeys = '7','6','5','4','3','2','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Multiple choice
        press [7]: I definitely saw each dot in a well-defined location
        [6]: I think I saw each dot in a general region, but not necessarily in a definitive location
        [5]: I definitely saw dots but I don’t have a sense of where they were located
        [4]: I probably saw dots but I don’t have a sense of where they were located
        [3]: I am not sure whether I saw dots or not
        [2]: I probably did not see any dots
        [1]: I definitely did not see any dots
  Routine NO_inst
    TextComponent text_7
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please report your own experience of the dots AT THE TIME when the image was presented
    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text = press [2] to move to next step
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    KeyboardComponent No_inst
      allowedKeys = '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine NOMemorRep
    TextComponent text_14
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0
      text = press [0] to move to next
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    KeyboardComponent key_resp_7
      allowedKeys = '0'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent text_15
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please note that we are not interested in your ability to remember or  reproduce the exact location of the dots later.
        We are interested in your experience at the moment that you were seeing the display.
        No matter whether you can reproduce the positions of dots or not, or no matter whether you remember the location of the dots or not, please report your own experience of the dots AT THE TIME when the image was presented
  Routine Explicit_Rep
    KeyboardComponent key_resp_8
      allowedKeys = '4'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    TextComponent text_16
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0
      text = press [4] to move next
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    TextComponent text_17
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please consider whether you can remember or reproduce the exact locations of the dots you just saw.
        We are interested in your experience at the moment that you were seeing the display.
        Please report your own experience of the dots AT THE TIME when the image was presented
  Routine mouse
    MouseComponent click
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = actual_location
      startVal [time (s)] = 0.0
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Flow
  Routine term_and_condition
  Routine calibration
  Routine instruction
  Routine practice_trial
  Routine practice_stimuli
  Routine mouse
  Routine start_actual
  LoopInitiator trials_0 loopType="TrialHandler"
    conditionsFile = dots_setting.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'images': 'images/2.jpg', 'location': (0.05, 0.01)},
      {'images': 'images/27.jpg', 'location': (-0.3, 0.15)},
      {'images': 'images/64.jpg', 'location': (0.25, 0)},
      {'images': 'images/4.jpg', 'location': (0.2, -0.3)},
      {'images': 'images/32.jpg', 'location': (-0.3, 0.3)},
      {'images': 'images/79.jpg', 'location': (0.1, -0.05)},
      {'images': 'images/8.jpg', 'location': (-0.3, -0.3)},
      {'images': 'images/38.jpg', 'location': (-0.3, -0.25)},
      {'images': 'images/87.jpg', 'location': (-0.3, 0.05)},
      {'images': 'images/16.jpg', 'location': (-0.25, 0.3)},
      {'images': 'images/47.jpg', 'location': (0, 0.3)},
      {'images': 'images/100.jpg', 'location': (0.3, 0.2)},
      {'images': 'images/20.jpg', 'location': (0.02, -0.3)},
      {'images': 'images/55.jpg', 'location': (-0.1, -0.3)},
      {'images': 'images/128.jpg', 'location': (0.3, 0.1)}]
    Routine NOMemorRep
    Routine stimuli
    Routine mouse
  LoopTerminator trials_0
  LoopInitiator trials_1 loopType="TrialHandler"
    conditionsFile = dots_setting.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'images': 'images/2.jpg', 'location': (0.05, 0.01)},
      {'images': 'images/27.jpg', 'location': (-0.3, 0.15)},
      {'images': 'images/64.jpg', 'location': (0.25, 0)},
      {'images': 'images/4.jpg', 'location': (0.2, -0.3)},
      {'images': 'images/32.jpg', 'location': (-0.3, 0.3)},
      {'images': 'images/79.jpg', 'location': (0.1, -0.05)},
      {'images': 'images/8.jpg', 'location': (-0.3, -0.3)},
      {'images': 'images/38.jpg', 'location': (-0.3, -0.25)},
      {'images': 'images/87.jpg', 'location': (-0.3, 0.05)},
      {'images': 'images/16.jpg', 'location': (-0.25, 0.3)},
      {'images': 'images/47.jpg', 'location': (0, 0.3)},
      {'images': 'images/100.jpg', 'location': (0.3, 0.2)},
      {'images': 'images/20.jpg', 'location': (0.02, -0.3)},
      {'images': 'images/55.jpg', 'location': (-0.1, -0.3)},
      {'images': 'images/128.jpg', 'location': (0.3, 0.1)}]
    Routine memory_inst
    Routine stimuli
    Routine mouse
  LoopTerminator trials_1
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = dots_setting.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine NO_inst
    Routine stimuli
    Routine mouse
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = dots_setting.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Explicit_Rep
    Routine stimuli
    Routine mouse
  LoopTerminator trials_3
